<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="FileNameLeft" />
        <Property Name="FrameRate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ToggleTrigger>true</p1:ToggleTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.raw.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="FileNameLeftData" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:ScreenCaptureStream">
          <vid:HideCursor>false</vid:HideCursor>
          <vid:CaptureRegion>
            <vid:X>-1024</vid:X>
            <vid:Y>0</vid:Y>
            <vid:Width>1024</vid:Width>
            <vid:Height>768</vid:Height>
          </vid:CaptureRegion>
          <vid:FrameInterval>0</vid:FrameInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>1024</cv:Width>
            <cv:Height>768</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="FileNameScreen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\test\test.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioCapture">
          <al:DeviceName>Microphone (UltraMic 200K 16 bi</al:DeviceName>
          <al:SampleRate>200000</al:SampleRate>
          <al:SampleFormat>Mono16</al:SampleFormat>
          <al:BufferLength>10</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RecordSound" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SkipUntil" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="FileNameMic" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioWriter">
          <al:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_behavior_data\_iblrig_micData.raw.wav</al:FileName>
          <al:Suffix>None</al:Suffix>
          <al:Buffered>true</al:Buffered>
          <al:Overwrite>true</al:Overwrite>
          <al:SampleRate>200000</al:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\GetFrameData.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.frameData.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/x</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
        <osc:Connection>bpod</osc:Connection>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1</gl:Width>
          <gl:Height>1</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location>
            <gl:X>-1024</gl:X>
            <gl:Y>0</gl:Y>
          </gl:Location>
          <gl:WindowBorder>Hidden</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>128</gl:Red>
              <gl:Green>128</gl:Green>
              <gl:Blue>128</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="19" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="2" To="16" Label="Source2" />
      <Edge From="4" To="21" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="10" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="15" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="18" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="24" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>